<CompuCell3D Revision="20200118" Version="4.1.1">

    <!-- ____________________________SIMULATION PARAMETERS____________________________ -->

    <Metadata>
        <NumberOfProcessors>2</NumberOfProcessors>
        <DebugOutputFrequency>10</DebugOutputFrequency>
        <!-- <NonParallelModule Name="Potts"/> -->
    </Metadata>

    <!-- ____________________________MODEL PARAMETERS____________________________ -->

    <Potts>
        <!-- Basic properties of Potts model -->
        <Dimensions x="200" y="200" z="1"/>   <!--FOR 2D-->
        <!--Dimensions x="200" y="200" z="200"/--> <!--FOR 3D -->
        <Steps>10000</Steps>
        <NeighborOrder>1</NeighborOrder>
        <Boundary_x>Periodic</Boundary_x>
        <Boundary_y>Periodic</Boundary_y>
        <!--Boundary_z>Periodic</Boundary_z--> <!--FOR 3D only-->

        <!-- The temperature, aka fluctuation amplitude: -->
        <FluctuationAmplitude>
            <FluctuationAmplitudeParameters CellType="Tumor" FluctuationAmplitude="15"/>
            <FluctuationAmplitudeParameters CellType="Collagen" FluctuationAmplitude="0"/>
        </FluctuationAmplitude>
    </Potts>

    <Plugin Name="CellType">
        <!-- Listing all cell types in the simulation -->
        <CellType TypeId="0" TypeName="Medium"/>
        <CellType Freeze="" TypeId="1" TypeName="Collagen"/> <!-- add Freeze="" to disable proteolysis -->
        <CellType TypeId="2" TypeName="Tumor"/>
    </Plugin>

    <Plugin Name="Volume"/> <!-- Parameters set in Python steppable -->

    <Plugin Name="Surface"/> <!-- Parameters in python steppable only work when your call the plugin like this -->

    <!-- ____________________________ADHESION____________________________ -->

    <Plugin Name="Contact">
        <!-- The following values are from Scianna et al.: TM 6.5, TC 4.5, TT 12.0 -->
        <Energy Type1="Tumor" Type2="Medium">6.5</Energy>
        <Energy Type1="Tumor" Type2="Collagen">4.5</Energy>
        <Energy Type1="Tumor" Type2="Tumor">10.0</Energy>

        <!-- I don't know what Scianna et al. do with these. -->
        <!-- Let's make them high so the adhesion is weak -->
        <Energy Type1="Medium" Type2="Medium">20.0</Energy>
        <Energy Type1="Medium" Type2="Collagen">20.0</Energy>
        <Energy Type1="Collagen" Type2="Collagen">20.0</Energy>
        <NeighborOrder>4</NeighborOrder>
    </Plugin>

    <!-- ____________________________CATERPILLAR EFFECT____________________________ -->

    <!-- The constants for the caterpillar (CPT field) movement are of course a bit finetuned, feel free to play with them -->
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="CTP" Source="DiffusionSolverFE">
            <ChemotaxisByType Lambda="20.0" Type="Tumor"/>
        </ChemicalField>

        <!--<ChemicalField Name="Migration factor" Source="DiffusionSolverFE">
            <ChemotaxisByType Lambda="-300" Type="Tumor" ChemotactTowards="Medium"/>
            &lt;!&ndash;<ChemotaxisByType Lambda="300" Type="Tumor" ChemotactTowards="Tumor"/>&ndash;&gt;
        </ChemicalField>-->
    </Plugin>

    <Steppable Type="DiffusionSolverFE">
        <DiffusionField Name="CTP">
            <DiffusionData>
                <FieldName>CTP</FieldName>
                <GlobalDiffusionConstant>0.00</GlobalDiffusionConstant>
                <GlobalDecayConstant>0.00</GlobalDecayConstant>

                <DoNotDiffuseTo>Collagen</DoNotDiffuseTo>
                <DiffusionCoefficient CellType="Collagen">0.00</DiffusionCoefficient>
                <DiffusionCoefficient CellType="Tumor">5e-04</DiffusionCoefficient>
                <DiffusionCoefficient CellType="Medium">0.00</DiffusionCoefficient>

                <DecayCoefficient CellType="Collagen">0.005</DecayCoefficient>
                <DecayCoefficient CellType="Tumor">0.0005</DecayCoefficient>
                <DecayCoefficient CellType="Medium">0.02</DecayCoefficient>

                <!--DoNotDecayIn>Tumor</DoNotDecayIn>
                <DoNotDiffuseTo>Medium</DoNotDiffuseTo-->

            </DiffusionData>

            <SecretionData>
                <SecretionOnContact Type="Tumor" SecreteOnContactWith="Collagen">0.03</SecretionOnContact>
            </SecretionData>
        </DiffusionField>

        <!-- ____________________________PROTEOLYSIS (MMP FIELD)____________________________ -->

        <DiffusionField Name="MMP">
            <DiffusionData>
                <FieldName>MMP</FieldName>
                <GlobalDiffusionConstant>1.6e-03
                </GlobalDiffusionConstant>  <!--Scianna: 0.0016 (but different units?) -->
                <GlobalDecayConstant>2e-04</GlobalDecayConstant>
                <!-- Maybe add cell-specific decay and diffusion constants? -->

            </DiffusionData>
            <!--<BoundaryConditions>
               <Plane Axis="X">
                  <ConstantValue PlanePosition="Min" Value="10.0"/>
                  <ConstantValue PlanePosition="Max" Value="5.0"/>
               </Plane>
               <Plane Axis="Y">
                  <ConstantDerivative PlanePosition="Min" Value="10.0"/>
                  <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               </Plane>
            </BoundaryConditions> TODO maybe add bcs-->
        </DiffusionField>

        <!-- ____________________________MIGRATION FACTOR____________________________ -->

        <!--<DiffusionField Name="Migration factor">
            <DiffusionData>
                <FieldName>Migration factor</FieldName>
                <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
                <GlobalDecayConstant>0.01</GlobalDecayConstant>
                &lt;!&ndash; Additional options are: &ndash;&gt;
                &lt;!&ndash; <InitialConcentrationExpression>x*y</InitialConcentrationExpression> &ndash;&gt;
                &lt;!&ndash; <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> &ndash;&gt;
                <DiffusionCoefficient CellType="Tumor">0.05</DiffusionCoefficient>
                <DecayCoefficient CellType="Tumor">0.03</DecayCoefficient>
            </DiffusionData>
            <SecretionData>
                 &lt;!&ndash;When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants &ndash;&gt;

                &lt;!&ndash; Uniform secretion Definition &ndash;&gt;
                <Secretion Type="Tumor">0.02</Secretion>
                &lt;!&ndash;<SecretionOnContact SecreteOnContactWith="tumor" Type="Medium">0.02</SecretionOnContact>
                <SecretionOnContact SecreteOnContactWith="tumor" Type="tumor">0.02</SecretionOnContact>&ndash;&gt;
                &lt;!&ndash; <ConstantConcentration Type="tumor">0.1</ConstantConcentration> &ndash;&gt;
            </SecretionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    &lt;!&ndash; Other options are (examples): &ndash;&gt;
                    <Periodic/>
                    &lt;!&ndash; <ConstantDerivative PlanePosition="Min" Value="10.0"/> &ndash;&gt;
                </Plane>
                <Plane Axis="Y">
                    &lt;!&ndash; Other options are (examples): &ndash;&gt;
                    <Periodic/>
                    &lt;!&ndash; <ConstantValue PlanePosition="Min" Value="10.0"/> &ndash;&gt;
                </Plane>
                &lt;!&ndash;TODO add Z direction as well (for 3D). But what's the point of boundary conds?&ndash;&gt;
            </BoundaryConditions>
        </DiffusionField>-->
    </Steppable>

    <Plugin Name="Secretion"/>


    <!-- ____________________________INITIAL CONDITION____________________________ -->


    <Steppable Type="PIFInitializer">
        <!-- Initial layout of cells using PIFF file. -->
        <PIFName>PIF files/testing caterpillar/onecollagen_threecells.piff</PIFName>
    </Steppable>
</CompuCell3D>
