<CompuCell3D Revision="20200118" Version="4.1.1">

    <Metadata>
        <!-- Basic properties simulation -->
        <NumberOfProcessors>3</NumberOfProcessors>
        <DebugOutputFrequency>100</DebugOutputFrequency>
        <!-- <NonParallelModule Name="Potts"/> -->
    </Metadata>

    <Potts>
        <!-- Basic properties of CPM (GGH) algorithm -->
        <Dimensions x="200" y="200" z="200"/>
        <Steps>10000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>1</NeighborOrder>
    </Potts>

    <Plugin Name="CellType">
        <!-- Listing all cell types in the simulation -->
        <CellType TypeId="0" TypeName="Medium"/>
        <CellType TypeId="1" TypeName="Cell"/>
    </Plugin>

    <Plugin Name="Volume"/>

    <Plugin Name="Contact"> <!--TODO it seems they made no distinction in adhesion properties-->
        <!-- Specification of adhesion energies -->
        <Energy Type1="Medium" Type2="Medium">15.0</Energy>
        <Energy Type1="Medium" Type2="Cell">15.0</Energy>
        <Energy Type1="Cell" Type2="Cell">10.0</Energy>
        <NeighborOrder>1</NeighborOrder>
    </Plugin>

    <Plugin Name="Chemotaxis">
        <!--Haptotaxis in soft collagen-->
        <ChemicalField Name="Collagen" Source="DiffusionSolverFE">
            <ChemotaxisByType Type="Cell" Lambda="100" SaturationCoef="1"/>
        </ChemicalField>

        <!--Resistance from hard collagen -->
        <ChemicalField Name="CollagenDense" Source="DiffusionSolverFE">
            <ChemotaxisByType Type="Cell" Lambda="-1500" SaturationCoef="1"/>
        </ChemicalField>

        <!--Cell matrix adhesion -->
        <ChemicalField Name="Difference" Source="DiffusionSolverFE">
            <ChemotaxisByType Type="Cell" Lambda="0" SaturationCoef="1"/>
        </ChemicalField>
    </Plugin>

    <Steppable Type="DiffusionSolverFE">
        <!-- Specification of PDE solvers -->

        <DiffusionField Name="Collagen">
            <DiffusionData>
                <FieldName>Collagen</FieldName>
                <GlobalDiffusionConstant>0</GlobalDiffusionConstant>
                <GlobalDecayConstant>0</GlobalDecayConstant>
                <InitialConcentrationExpression> rint(abs(x-100)/10) <!--0.5/(1+exp(200-((x-100)^2+(y-100)^2+(z-0)^2)))-->
                </InitialConcentrationExpression>
                <!--<ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
                <DiffusionCoefficient CellType="Cell">0</DiffusionCoefficient>
                <DecayCoefficient CellType="Cell">0</DecayCoefficient>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue PlanePosition="Min" Value="10.0"/>
                    <ConstantValue PlanePosition="Max" Value="5.0"/>
                </Plane>
                <Plane Axis="Y">
                    <ConstantDerivative PlanePosition="Min" Value="10.0"/>
                    <ConstantDerivative PlanePosition="Max" Value="5.0"/>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>

        <!-- Parts of the collagen where it is too dense to move --> -->
        <DiffusionField Name="CollagenDense">
            <DiffusionData>
                <FieldName>Collagen</FieldName>
                <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
                <GlobalDecayConstant>0e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>0</InitialConcentrationExpression>
                <DiffusionCoefficient CellType="Cell">0.0</DiffusionCoefficient>
                <DecayCoefficient CellType="Cell">0.0000</DecayCoefficient>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue PlanePosition="Min" Value="10.0"/>
                    <ConstantValue PlanePosition="Max" Value="5.0"/>
                </Plane>
                <Plane Axis="Y">
                    <ConstantDerivative PlanePosition="Min" Value="10.0"/>
                    <ConstantDerivative PlanePosition="Max" Value="5.0"/>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>

        <!-- The variance of the collagen field, used for cell-matrix adhesion  -->
        <DiffusionField Name="Difference">
            <DiffusionData>
                <FieldName>Difference</FieldName>
                <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
                <GlobalDecayConstant>0e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>0</InitialConcentrationExpression>
                <DiffusionCoefficient CellType="Cell">0.0</DiffusionCoefficient>
                <DecayCoefficient CellType="Cell">0.0000</DecayCoefficient>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue PlanePosition="Min" Value="10.0"/>
                    <ConstantValue PlanePosition="Max" Value="5.0"/>
                </Plane>
                <Plane Axis="Y">
                    <ConstantDerivative PlanePosition="Min" Value="10.0"/>
                    <ConstantDerivative PlanePosition="Max" Value="5.0"/>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>
    </Steppable>

    <Plugin Name="BoundaryPixelTracker"> <!-- Necessary for placing hard collagen -->
        <!-- Module tracking boundary pixels of each cell -->
        <NeighborOrder>1</NeighborOrder>
    </Plugin>

    <!--<Plugin Name="CenterOfMass">-->
    <!--&lt;!&ndash; Module tracking center of mass of each cell &ndash;&gt;-->
    <!--&lt;!&ndash; TODO necessary? -->
    <!--</Plugin>-->

    <Steppable Type="BlobInitializer">
        <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
        <Region>
            <Center x="100" y="100" z="100"/>
            <Radius>10</Radius>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Cell</Types>
        </Region>
    </Steppable>
</CompuCell3D>
